CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<Row>[0-9]{2})c(?P<Col>[0-9]{2})f(?P<Site>[0-9]{2})p01-ch(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch1") (directory doesnot contain "Nuclei")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:SYTO14_ConA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch3")
    Name to assign these images:WGA_Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Nuclei")
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    Name to assign these objects:nuclei
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:WGA_Actin
    Name the output image:Fibers
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:5
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    Enhancement method:Tubeness
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    Rescale result image:No

Threshold:[module_num:6|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
    Select the input image:Fibers
    Name the output image:Threshold_Actin
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:3.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
Morph:[module_num:7|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enabled:False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
    Select the input image:Threshold_Actin
    Name the output image:MorphBlue
    Select the operation to perform:clean
    Number of times to repeat operation:Forever
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    Select the operation to perform:fill
    Number of times to repeat operation:Custom
    Repetition number:10
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
ConvertImageToObjects:[module_num:8|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
    Select the input image:Threshold_Actin
    Name the output object:All_Actin
    Convert to boolean image:Yes
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:All_Actin
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:10|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
    Select the objects to filter:All_Actin
    Name the output objects:Actin
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.95
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:Yes
    Maximum value:500
    Select the measurement to filter by:AreaShape_MinorAxisLength
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:75
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
MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Actin
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Batch2_Actin_
    Overwrite existing files without warning?:No
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