CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<Row>[0-9]{2})c(?P<Col>[0-9]{2})f(?P<Site>[0-9]{2})p01-ch(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch1") (directory doesnot contain "Nuclei")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:SYTO14_ConA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch3")
    Name to assign these images:WGA_Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Nuclei")
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    Name to assign these objects:nuclei
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:Hoechst
    Name the output image:FilteredRNA
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:6,13
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
MaskImage:[module_num:6|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
    Select the input image:FilteredRNA
    Name the output image:HoechstNuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:HoechstNuclei
    Name the primary objects to be identified:Nucleolei
    Typical diameter of objects, in pixel units (Min,Max):13,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

OverlayOutlines:[module_num:8|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Hoechst
    Name the output image:SanityCheck
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Nucleolei

IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:nuclei
    Name the objects to be identified:cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:SYTO14_ConA
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:cells
    Select neighboring objects to measure:cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensity:[module_num:11|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
    Select images to measure:Hoechst, SYTO14_ConA, WGA_Actin
    Select objects to measure:Nucleolei, cells, nuclei

MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:Nucleolei, cells, nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureTexture:[module_num:13|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
    Select images to measure:Hoechst, SYTO14_ConA, WGA_Actin
    Select objects to measure:Nucleolei, cells, nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

RelateObjects:[module_num:14|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
    Parent objects:nuclei
    Child objects:Nucleolei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Batch2_Confocal_40x_
    Overwrite existing files without warning?:No
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